PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Study
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Routines
  Routine trial
  Routine Begrüßung
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Um das Experiment zu starten, drücken Sie die <Leertaste>

        Viel Spaß!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EinleistungEyetracking
  Routine EyeTrackingText
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = ..\CodeSnippets\Snippets\Eyetracking.png
      size = (538, 136)
      startVal [time (s)] = 0.0
      units = pix
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  Routine Stop
    ImageComponent image_3
      image = Resources\stopp.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Brocantiny
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        width = b_width[image_idx[current]]
        height = b_height[image_idx[current]]
        thisExp.addData("ImagePath", brocanto[image_idx[current]])
      End Routine:
        current = current + 1
    ImageComponent image_5
      image [set every repeat] = $brocanto[image_idx[current]]
      pos = (lm, 0)
      size [set every repeat] = [width, height]
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_6
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (500, 245)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_7
      image = ..\CodeSnippets\Snippets\BrocantinyErklärung.png
      pos = (rm, md)
      size = [202, 157]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BrocantinyErklräung
    ImageComponent image_4
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (500, 245)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_8
      image = ..\CodeSnippets\Snippets\BrocantinyErklärung.png
      pos = (rm, md)
      size = (202, 157)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_9
      image = ..\CodeSnippets\Snippets\BrocantinySatzMöglichkeiten.png
      pos = (lm, 0)
      size = (202, 94)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        current = 0
        image_idx = [0,1,2]
        random.shuffle(image_idx)
  Routine ProgrammierungErklärung
    ImageComponent image_10
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (500, 245)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_11
      image = ..\CodeSnippets\Snippets\ProgrammErklärung.png
      pos = (rm, md)
      size = (336, 157)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        current = 0
        image_idx = [0,1,2]
        random.shuffle(image_idx)
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Programm
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        width = c_width[image_idx[current]]
        height = c_height[image_idx[current]]
        print(width)
        print(height)
        thisExp.addData("ImagePath", code[image_idx[current]])
      End Routine:
        current = current + 1
    ImageComponent image_14
      image [set every repeat] = $code[image_idx[current]]
      pos [set every repeat] = (lm, 0)
      size [set every repeat] = (width, height)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_12
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (500, 245)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_13
      image = ..\CodeSnippets\Snippets\ProgrammErklärung.png
      pos = (rm, md)
      size = (336, 157)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Sätze
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        width = s_width[image_idx[current]]
        height = s_height[image_idx[current]]
        thisExp.addData("ImagePath", satz[image_idx[current]])
      End Routine:
        current = current + 1
    ImageComponent image_2
      image [set every repeat] = $satz[image_idx[current]]
      size [set every repeat] = [width, height]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Danke
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Vielen Dank für Ihre Teilnahme
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        if use_eyetracker:
            logger.stop_recording()
  Routine SatzStartup
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import random
        import pandas as pd
        from psychopy import logging
        logging.console.setLevel(logging.CRITICAL)


        random.seed()
        in_file = "./../CodeSnippets/conditions.xlsx"

        from psychopy import monitors

        mon = None
        for tmp_mon in monitors.getAllMonitors():
            mon = tmp_mon

        width = monitors.Monitor(mon).getSizePix()[0]
        height = monitors.Monitor(mon).getSizePix()[1]
        ll = -0.8 * width
        lm = -0.4 * width
        mm = 0.0 * width
        rm = 0.4 * width
        rr = 0.8 * width
        md = -0.1 * height
        mu = 0.2 * height
      Begin Experiment:
        inbook = pd.read_excel(in_file)

        global brocanto
        global b_width
        global b_height

        global code
        global c_width
        global c_height

        global satz
        global s_width
        global s_height

        global current
        global image_idx

        satz = ["..\CodeSnippets\Snippets\Satz1.png","..\CodeSnippets\Snippets\Satz2.png", "..\CodeSnippets\Snippets\Satz3.png", "..\CodeSnippets\Snippets\Satz4.png"]
        s_width = [566, 451, 566,624]
        s_height = [31, 31, 31, 52]

        brocanto = ["..\CodeSnippets\Snippets\BrocantinySatz1.png","..\CodeSnippets\Snippets\BrocantinySatz2.png", "..\CodeSnippets\Snippets\BrocantinySatz3.png"]
        b_width = [346, 403, 365]
        b_height = [31, 31, 31]

        code = ["..\CodeSnippets\Snippets\ProgrammSatz1.png", "..\CodeSnippets\Snippets\ProgrammSatz2.png", "..\CodeSnippets\Snippets\ProgrammSatz3.png"]
        c_width = [336, 576, 317]
        c_height = [31, 31, 31]

        current = 0
        image_idx = [0,1,2,3]
        random.shuffle(image_idx)
  Routine CodeStartup
    CodeComponent code_8
      Code Type = Py
      Begin Experiment:
        from EyetrackerUtils.base_functionalities.logger import Logger
        global use_eyetracking
        global logger
        use_eyetracking = True
        logger = None
        if use_eyetracking:
            logger = Logger("C:/Users/SE-Chair/Documents/GitHub/Brocantiny/Study/data/Eyedata_S" + str(int(expInfo["session"])) + "_P" + str(int(expInfo["participant"])) +".csv")
            logger.add_key_to_log('left_gaze_point_in_user_coordinate_system')
            logger.add_key_to_log('left_gaze_point_validity')
            logger.add_key_to_log('right_gaze_point_validity')
            logger.add_key_to_log('right_gaze_point_in_user_coordinate_system')
            logger.add_key_to_log('left_gaze_origin_in_user_coordinate_system')
            logger.add_key_to_log('right_gaze_origin_in_user_coordinate_system')
            logger.add_key_to_log('left_gaze_point_on_display_area')
            logger.add_key_to_log('right_gaze_point_on_display_area')
            logger.add_key_to_log('system_time_stamp')
            logger.add_key_to_log('left_pupil_diameter')
            logger.add_key_to_log('right_pupil_diameter')
            logger.start_recording()
Flow
  Routine CodeStartup
  Routine Begrüßung
  Routine EyeTrackingText
  Routine SatzStartup
  Routine Sätze
  Routine Sätze
  Routine Sätze
  Routine Sätze
  Routine Stop
  Routine BrocantinyErklräung
  Routine Brocantiny
  Routine Brocantiny
  Routine Brocantiny
  Routine ProgrammierungErklärung
  Routine Programm
  Routine Programm
  Routine Programm
  Routine Danke
