PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = Study
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Routines
  Routine Begrüßung
    TextComponent text
      letterHeight = 26
      startVal [time (s)] = 0.0
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      text:
        Viel Spaß!

        Um das Experiment zu starten, drücken Sie die

        <Leertaste>
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Danke
    TextComponent text_3
      letterHeight = 26
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Teilnahme

        Beenden mit <Leertaste>
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        if use_eyetracking:
            logger.stop_recording()
  Routine CodeStartup
    CodeComponent code_8
      Code Type = Py
      Begin Experiment:
        global use_eyetracking
        global logger
        use_eyetracking = False
        logger = None

        if use_eyetracking:
            from EyetrackerUtils.base_functionalities.logger import Logger
            logger = Logger("./Eyedata_S" + str(int(expInfo["session"])) + "_P" + str(int(expInfo["participant"])) +".csv")
            logger.add_key_to_log('left_gaze_point_validity')
            logger.add_key_to_log('right_gaze_point_validity')
            logger.add_key_to_log('left_gaze_point_on_display_area')
            logger.add_key_to_log('right_gaze_point_on_display_area')
            logger.add_key_to_log('system_time_stamp')

        if use_eyetracking:
            logger.start_recording()
  Routine Startup
    CodeComponent code
      Code Type = Py
      Before Experiment:
        from psychopy import monitors

        mon = None
        for tmp_mon in monitors.getAllMonitors():
            mon = tmp_mon

        width = monitors.Monitor(mon).getSizePix()[0]
        height = monitors.Monitor(mon).getSizePix()[1]
        lm = -0.4 * width
        mm = 0.0 * width
        rm = 0.4 * width
        md = -0.4 * height
        mu = 0.4 * height
  Routine ProgrammErklärung
    ImageComponent Brocantiny_2
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ProgrammMapping
      image = ..\CodeSnippets\Snippets\ProgrammErklärung.png
      pos = (rm, md)
      size = (452, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Programm_Beispiel
      image = ..\CodeSnippets\Snippets\ProgrammBeispiel.png
      pos = (lm, 0)
      size = (504, 88)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BrocantinyErklärung
    ImageComponent Brocantiny
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BrocantinyMapping
      image = ..\CodeSnippets\Snippets\BrocantinyErklärung.png
      pos = (rm, md)
      size = (504, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Brocantiny_Beispiel
      image = ..\CodeSnippets\Snippets\BrocantinyBeispiel.png
      pos = (lm, 0)
      size = (257, 49)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Satz1
    ImageComponent satz_1
      image = ..\CodeSnippets\Snippets\Satz1.png
      size = (933, 49)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Satz2
    ImageComponent satz_2
      image = ..\CodeSnippets\Snippets\Satz3.png
      size = (894, 49)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Satz3
    ImageComponent satz_3
      image = ..\CodeSnippets\Snippets\Satz1.png
      size = (764, 49)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Einweisung
    TextComponent text_4
      letterHeight = 26
      startVal [time (s)] = 0.0
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      text:
        Im Folgenden wird Ihn ein Endlicher Automat gezeigt. Ebnso wird Ihnen ein Mapping von Automat Variablen auf diverse Wörter vorgestellt. Ihre Aufgabe ist es, zu entscheiden ob ein Gegebener Satz Richtig oder Falsch ist.

        Drücken Sie dafür jeweils die <Linke Pfeiltaste> oder die <Rechte Pfeiltaste>. Doch beginnen wir mit einem Beispiel.

        Weiter mit <Leertaste>
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Brocantiny1
    ImageComponent Brocantiny_3
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BrocantinyMapping_2
      image = ..\CodeSnippets\Snippets\BrocantinyErklärung.png
      pos = (rm, md)
      size = (504, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BS1
      image = ..\CodeSnippets\Snippets\Brocantiny1.png
      pos = (lm, 0)
      size = (270, 88)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent BSI1
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Brocantiny2
    ImageComponent Brocantiny_4
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BrocantinyMapping_3
      image = ..\CodeSnippets\Snippets\BrocantinyErklärung.png
      pos = (rm, md)
      size = (504, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BS2
      image = ..\CodeSnippets\Snippets\Brocantiny2.png
      pos = (lm, 0)
      size = (257, 88)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent BSI2
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Brocantiny3
    ImageComponent Brocantiny_5
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BrocantinyMapping_4
      image = ..\CodeSnippets\Snippets\BrocantinyErklärung.png
      pos = (rm, md)
      size = (504, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent BS3
      image = ..\CodeSnippets\Snippets\Brocantiny3.png
      pos = (lm, 0)
      size = (400, 88)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent BSI3
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Brocantiny4
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  Routine Stop
    TextComponent text_5
      letterHeight = 26
      startVal [time (s)] = 0.0
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      text:
        Weiter um den nächsten Teil des Experiments zu starten

        <Leertaste>
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Einweisung2
    TextComponent text_6
      letterHeight = 26
      startVal [time (s)] = 0.0
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      text:
        Im Folgenden wird das Mapping der Variablen auf die Wörter geändert. Ihre Aufgabe bleibt die Gleiche.

        Weiter mit <Leertaste>
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Einweisung3
    TextComponent text_2
      letterHeight = 26
      startVal [time (s)] = 0.0
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      text:
        Im Nachfolgenden werden Ihnen Sätze natürlicher Sprache gezeigt. Geben Sie Bitte an, ob Sie einen intuitven Zusammenhang zwischen der Grammatik der Sätze und dem bisher gezeigten Automaten gibt.

        Weiter mit <Leetaste>
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Programm1
    ImageComponent Brocantiny_7
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ProgrammMapping_2
      image = ..\CodeSnippets\Snippets\ProgrammErklärung.png
      pos = (rm, md)
      size = (452, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent PS1
      image = ..\CodeSnippets\Snippets\Programm1.png
      pos = (lm, 0)
      size = (244, 88)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent PSI1
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Programm2
    ImageComponent Brocantiny_8
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ProgrammMapping_3
      image = ..\CodeSnippets\Snippets\ProgrammErklärung.png
      pos = (rm, md)
      size = (452, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent PS2
      image = ..\CodeSnippets\Snippets\Programm2.png
      pos = (lm, 0)
      size = (452, 166)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent PSI2
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Programm3
    ImageComponent Brocantiny_9
      image = Resources\Brokantiny.PNG
      pos = (rm, mu)
      size = (593, 414)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ProgrammMapping_4
      image = ..\CodeSnippets\Snippets\ProgrammErklärung.png
      pos = (rm, md)
      size = (452, 361)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent PS3
      image = ..\CodeSnippets\Snippets\Programm3.png
      pos = (lm, 0)
      size = (270, 205)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent PSI3
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Programm4
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Flow
  Routine Startup
  Routine Begrüßung
  Routine Einweisung
  Routine CodeStartup
  Routine BrocantinyErklärung
  Routine Stop
  Routine Brocantiny1
  Routine Brocantiny2
  Routine Brocantiny3
  Routine Brocantiny4
  Routine Einweisung2
  Routine ProgrammErklärung
  Routine Stop
  Routine Programm1
  Routine Programm2
  Routine Programm3
  Routine Programm4
  Routine Einweisung3
  Routine Satz1
  Routine Satz2
  Routine Satz3
  Routine Danke
